---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates no
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Josh\\Desktop\\Josh work\\Courses\\Research toolbox"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction always
	run pygaze_init always
	run experiment_loop always

define loop experiment_loop
	set source table
	set repeat 20
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 arrow left
	setcycle 0 square left
	setcycle 1 arrow left
	setcycle 1 square right
	setcycle 2 arrow right
	setcycle 2 square left
	setcycle 3 arrow right
	setcycle 3 square right
	run trial_sequence

define sketchpad feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#34ff11" show_if="[square]=left" style=default x=-288 y=0 z_index=0
	draw fixdot color="#34ff11" show_if="[square]=right" style=default x=288 y=0 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Every trial, focus your eyes on the central dot<br />and then (and only then!) press spacebar.<br /><br />You will see a circle and a square, and your<br />task is to move your eyes to the SQUARE as<br />quickly as possible.<br />You will also see arrows pointing left- or<br />rightward, but these must be ignored. Of course<br />you also have to ignore the circle, as the<br />square is your target.<br /><br />Press a button to start the experiment." x=0 y=-96 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define pygaze_drift_correct pygaze_drift_correct
	set ypos 384
	set xpos 512
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define inline_script saccade_response
	set description "Executes Python code"
	___run__
	# We want to know the response time, so first we have to mark the 
	# timepoint of stimulus onset:
	start_time = self.time()
	
	all_y_values = []
	
	while True: # Then we enter an endless loop, that we only break out of when
	            # the eyes land on the square
		
		x,y = eyetracker.sample() # Check the eye position
		
		all_y_values.append(384-y) # add deviation from vertical center to list
		
		# Check if the eye position is in the square:
		if x in range(left_boundary,right_boundary) and y in range(352,416):
			# If so, we first want to make sure it's a true response, and not some
			# accidental measurement (e.g. due to blinking). Let's say the response
			# is real if the eyes are there for at least 50 ms. So we take a 50ms break.
			self.sleep(50)
			#... and then check again:
			if x in range(left_boundary,right_boundary) and y in range(352,416):
				# If so, then specify the response time (i.e. current time minus start_time
				# and minus the 50 ms pause)
				exp.set('response_time',self.time() - start_time-50)
				break # And break out of the loop
			# Note that if the eye position isn't on the square anymore, we just start a
			# new cycle of the loop.
	
	
	curvature = int(float(sum(all_y_values))/len(all_y_values))
	exp.set('curvature',curvature)
	__end__
	___prepare__
	# Here we determine the coordinates of the square, depending on condition:
	
	if exp.get('square') == 'left':
		left_boundary = 192
		right_boundary = 256
	else:
		left_boundary = 768
		right_boundary = 832
	
	# And note that the upper and lower boundary are always the same (352 and 416).
	__end__

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=1 h=64 penwidth=1 show_if="[square]=left" w=-64 x=-256 y=-32 z_index=0
	draw rect color=white fill=1 h=64 penwidth=1 show_if="[square]=right" w=-64 x=320 y=-32 z_index=0
	draw image center=1 file="arrow_left.png" scale=0.5 show_if="[arrow]=left" x=0 y=0 z_index=0
	draw image center=1 file="arrow_right.png" scale=0.5 show_if="[arrow]=right" x=0 y=0 z_index=0
	draw circle color=white fill=1 penwidth=1 r=32 show_if="[square]=right" x=-288 y=0 z_index=0
	draw circle color=white fill=1 penwidth=1 r=32 show_if="[square]=left" x=288 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pygaze_drift_correct always
	run pygaze_start_recording always
	run stimulus always
	run saccade_response always
	run pygaze_stop_recording always
	run feedback always
	run logger always

